PsychoPy2experiment version="2022.2.4"
Settings
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = Demo_almost_all_features
  keyboardBackend = ioHub
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Routines
  Routine trial
    TextComponent text_9
      letterHeight = 0.05
      pos = (0,0.35)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
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      text [set every frame]:
        $t
    ImageComponent Prompts
      image [set every frame] = $Prompt
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
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    KeyboardComponent Prompt1TR
      allowedKeys = '5'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Stim2_2
  Routine Stim2_3
    TextComponent text_3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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      text [set every repeat]:
        $Stim2
  Routine Stimulus1
    TextComponent StimuliTimer1
      letterHeight = 0.05
      pos = (0, 0.35)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      text [set every frame] = $t
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    ImageComponent Stimuli1
      image [set every frame] = $Stim1
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
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    KeyboardComponent TR_Stim1
      allowedKeys [set every repeat] = '5'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Stimulus2
    TextComponent StimuliTimer2
      letterHeight = 0.05
      pos = (0, 0.35)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      text [set every frame] = $t
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    ImageComponent Stimuli2
      image [set every frame] = $Stim2
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
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    KeyboardComponent TR_Stim2
      allowedKeys [set every repeat] = '5'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Stimulus3
    TextComponent StimuliTimer3
      letterHeight = 0.05
      pos = (0, 0.35)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      text [set every frame] = $t
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    ImageComponent Stimuli3
      image [set every frame] = $Stim3
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
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    KeyboardComponent TR_Stim3
      allowedKeys [set every repeat] = '5'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Stimulus4
    TextComponent StimuliTimer4
      letterHeight = 0.05
      pos = (0, 0.35)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      text [set every frame] = $t
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    ImageComponent Stimuli4
      image [set every frame] = $Stim4
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
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    KeyboardComponent TR_Stim4
      allowedKeys = '5'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Rest15secs
    TextComponent text_8
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 15
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    TextComponent text_15
      letterHeight = 0.05
      pos = (0, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 15
      text [set every frame] = $t
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    CodeComponent code_2
      Code Type = Auto->JS
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      Each Frame:
        if len (rest_key.keys) == 10:
                    rest_key.keys = []
                    continueRoutine = False
    KeyboardComponent rest_key
      allowedKeys = '5'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 15
      store = all keys
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  Routine RestEither3or6Secs
    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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    TextComponent text_10
      letterHeight = 0.05
      pos = (0, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $TimeBetween
      text [set every frame] = $t
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    CodeComponent code_3
      Code Type = Auto->JS
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      Begin Routine:
        jitter = trials.thisTrial.get("TimeBetween")
        print(jitter)
      Each Frame:
        if jitter == 1.5:
            if len (key_resp.keys) == 1:
                    continueRoutine = False
        if jitter == 3.0:
            if len (key_resp.keys) == 2:
                    continueRoutine = False
        if jitter == 4.5:
            if len (key_resp.keys) == 3:
                    continueRoutine = False
    KeyboardComponent key_resp
      allowedKeys = '5'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      store = all keys
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  Routine routine_5TR_PrePeriod
    KeyboardComponent waiting_TR
      allowedKeys [set every repeat] = '5'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 30
      store = all keys
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 30
      text = Waiting for Scanner
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    CodeComponent code
      Code Type = Auto->JS
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      Each Frame:
        if len (waiting_TR.keys) == 5:
                    continueRoutine = False
  Routine routine_5TR_EndPeriod
  Routine routine_5TR_PostPeriod
Flow
  Routine routine_5TR_PrePeriod
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = Conditions.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('Prompt', 'Pictures/SHPrompt1.png '), ('Stim1', 'Pictures/Square1.png'), ('Stim2', 'Pictures/Square2.png'), ('Stim3', 'Pictures/Square3.png'), ('Stim4', 'Pictures/Square4.png'), ('TimeBetween', 1.5)]),
      OrderedDict([('Prompt', 'Pictures/SFPrompt1.png'), ('Stim1', 'Pictures/Square1.png'), ('Stim2', 'Pictures/Square2.png'), ('Stim3', 'Pictures/Square3.png'), ('Stim4', 'Pictures/Square4.png'), ('TimeBetween', 3.0)]),
      OrderedDict([('Prompt', 'Pictures/OHPrompt1'), ('Stim1', 'Pictures/Oval1.png'), ('Stim2', 'Pictures/Oval2.png'), ('Stim3', 'Pictures/Oval3.png'), ('Stim4', 'Pictures/Oval4.png'), ('TimeBetween', 4.5)]),
      OrderedDict([('Prompt', 'Pictures/OFPrompt1'), ('Stim1', 'Pictures/Oval1.png'), ('Stim2', 'Pictures/Oval2.png'), ('Stim3', 'Pictures/Oval3.png'), ('Stim4', 'Pictures/Oval4.png'), ('TimeBetween', 1.5)]),
      OrderedDict([('Prompt', 'Pictures/SHPrompt1.png '), ('Stim1', 'Pictures/Square1.png'), ('Stim2', 'Pictures/Square2.png'), ('Stim3', 'Pictures/Square3.png'), ('Stim4', 'Pictures/Square4.png'), ('TimeBetween', 3.0)]),
      OrderedDict([('Prompt', 'Pictures/SFPrompt1.png'), ('Stim1', 'Pictures/Square1.png'), ('Stim2', 'Pictures/Square2.png'), ('Stim3', 'Pictures/Square3.png'), ('Stim4', 'Pictures/Square4.png'), ('TimeBetween', 4.5)]),
      OrderedDict([('Prompt', 'Pictures/OHPrompt1'), ('Stim1', 'Pictures/Oval1.png'), ('Stim2', 'Pictures/Oval2.png'), ('Stim3', 'Pictures/Oval3.png'), ('Stim4', 'Pictures/Oval4.png'), ('TimeBetween', 1.5)])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
    Routine trial
    Routine RestEither3or6Secs
    Routine Stimulus1
    Routine Stimulus2
    Routine Stimulus3
    Routine Stimulus4
    Routine Rest15secs
  LoopTerminator trials
